// Macro to measure control sites specified by oval ROIs saved in ROI manager - ImageJ1 Macro Language

//Locate source file
ABCpath = File.openDialog("Select image File");
   AverageBgCorrected=File.getName(ABCpath);
   ABCdir= File.getParent(ABCpath);
   XYpath = File.openDialog("Select XY coord file");
   XYname=File.getName(XYpath);
   XYdir= File.getParent(XYpath);

  //Gather information about file
  
  Dialog.create("Diamond Data")
   Dialog.addChoice("Date Taken",newArray("14th","15th","20th","21st")); 
   Dialog.addChoice("Genotype", newArray("Triple","og","Exo84b","ARP2")); 
   Dialog.addNumber("GIN", 1); 
   Dialog.addNumber("Cell Number",1); 
   Dialog.addString("Diamonds present", "spaces, no commas e.g. D1 D2")
   Dialog.show();
   DateTaken = Dialog.getChoice();
   Genotype = Dialog.getChoice();;
   GIN = Dialog.getNumber();
   CellNumber = Dialog.getNumber();;
   DiamondsPresent = Dialog.getString();
   open(ABCpath);
   selectWindow(AverageBgCorrected);
   OriginalFrameNumber=nSlices;

   // Save ROI info
   
	open(XYpath);
	roiManager("Select",0);
Roi.getBounds(x, y, width, height);
roiManager("Save", ABCdir+"/Cell "+CellNumber+" Outline ROI "+Genotype+" "+GIN+" "+DateTaken+".zip");

// Copy ROIs at each frame, adjusted by coordinate drift in XY coord file created by "Measure Diamond site" macro
	
	for (o=1;o<OriginalFrameNumber; o++){ 
		
   	  slice=o+1; 
   	  roiManager("Select",0);
      p= getResult("x", 0);
      q= getResult("y", 0); 
      r= getResult("x",o);
      s= getResult("y",o);
     
      t=(r-p);
      u=(s-q);
      v=(x+t);
      w=(y+u);
	 	roiManager("Select",0);
	 	Roi.move(v, w);
	   roiManager("Add");
	   roiManager("Select",o);
	   setSlice(slice);
	   roiManager("update")
	   roiManager("Select",0);
	 	Roi.move(x,y);
	  roiManager("update")
   } 

  // Save ROI information
  
   run("Select All");
roiManager("Save", ABCdir+"/Cell ROIs "+Genotype+" "+GIN+" Cell "+CellNumber+" "+DateTaken+".zip");

// Measure the ROIs at each frame and save result

for (i=0;i<OriginalFrameNumber; i++){ 

roiManager("Select",i);

	setSlice(i+1);
	run("Measure"); 
}
    selectWindow("Results");
 saveAs("Results", ABCdir+"/Results for Cell Average "+Genotype+" "+GIN+" Cell "+CellNumber+" with "+DiamondsPresent+" "+DateTaken+".csv");

 
